opentrons/protocol-designer 5.2.6
schemaVersion: 4
protocolName: Lysate spotting (6 tix)
author: U.S. Army DEVCOM CBC - Dan Phillips
description: This protocol dispenses CFPS reagents onto 15-well tickets in the homemade ticket holder for freezing w/ LN2.
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_single_gen2: {mount: left}
  p300_single_gen2: {mount: right}
modules:
  temperatureModuleV2: {slot: 4}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Filter Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_filtertiprack_20ul/1, slot: 6}
  Reagent block: {definitionId: opentrons/opentrons_24_aluminumblock_nest_1.5ml_snapcap/1, slot: 5}
  ticket holder: {definitionId: custom_beta/cbcticket1v3_16_wellplate_3ul/1, slot: temperatureModuleV2}
pipetteTiprackAssignments:
  p20_single_gen2: opentrons/opentrons_96_filtertiprack_20ul/1
  p300_single_gen2: opentrons/opentrons_96_filtertiprack_200ul/1
ingredients:
  - Lysate Master Mix: {description: lacZ knockout lysate}
ingredLocations:
  Reagent block:
    Lysate Master Mix {volume: 375}: A1
savedStepForms:
- stepType: temperature
  stepName: temperature
  moduleId: temperatureModuleV2
  setTemperature: true
  targetTemperature: 4
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilTemperature
  pauseTemperature: 4
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 3
  path: single
  changeTip: once
  aspirate_labware: Reagent block
  aspirate_wells: A1
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  dispense_labware: ticket holder
  dispense_wells: A1-C1, E1-G1, A2-C2, E2-G2, A3-C3, E3-G3, A4-C4, E4-G4, A5-C5, E5-G5, A6-C6, E6-G6, A7-C7, E7-G7, A8-C8, E8-G8, A9-C9, E9-G9, A10-C10, E10-G10, A11-C11, E11-G11, A12-C12, E12-G12
  dispense_mmFromBottom: 0
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: temperature
  stepName: temperature
  moduleId: temperatureModuleV2
  setTemperature: false
labwareDefinitions:
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  custom_beta/cbcticket1v3_16_wellplate_3ul/1:
    brand: {brand: CBC_ticket1v3, brandId: []}
    metadata: {displayName: CBC_ticket1v3 16 Well Plate 3 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127, yDimension: 85, zDimension: 12}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: cbcticket1v3_16_wellplate_3ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 2.4, totalLiquidVolume: 3, shape: circular, diameter: 3, x: 18.75, y: 66.75, z: 9.6}
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commands:
- temperatureModule/setTargetTemperature: {module: temperatureModuleV2, temperature: 4}
- temperatureModule/awaitTemperature: {module: temperatureModuleV2, temperature: 4}
- pickUpTip: {pipette: p20_single_gen2, labware: Opentrons 96 Filter Tip Rack 20 µL, well: A1}
- aspirate: {pipette: p20_single_gen2, volume: 3, labware: Reagent block, well: A1, offsetFromBottomMm: 1, flowRate: 3.78}
- dispense: {pipette: p20_single_gen2, volume: 3, labware: ticket holder, well: A1, offsetFromBottomMm: 0.5, flowRate: 3.78}
- blowout: {pipette: p20_single_gen2, labware: ticket holder, well: A1, flowRate: 3.78, offsetFromBottomMm: 2.4}
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