opentrons/protocol-designer 5.2.6
schemaVersion: 4
protocolName: STEM kit strip
author: U.S. Army DEVCOM CBC - Dan Phillips, Mary Lee
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p1000_single_gen2: {mount: left}
  p300_multi_gen2: {mount: right}
modules:
  temperatureModuleV2: {slot: 4}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Filter Tip Rack 1000 µL: {definitionId: opentrons/opentrons_96_filtertiprack_1000ul/1, slot: 8}
  Opentrons 96 Filter Tip Rack 200 µL: {definitionId: opentrons/opentrons_96_filtertiprack_200ul/1, slot: 9}
  strip tubes: {definitionId: opentrons/opentrons_96_aluminumblock_generic_pcr_strip_200ul/1, slot: 5}
  Lysates: {definitionId: opentrons/opentrons_15_tuberack_falcon_15ml_conical/1, slot: 7}
  lysate reservoir: {definitionId: opentrons/nest_96_wellplate_2ml_deep/1, slot: temperatureModuleV2}
  strip tubes (1): {definitionId: opentrons/opentrons_96_aluminumblock_generic_pcr_strip_200ul/1, slot: 6}
pipetteTiprackAssignments:
  p1000_single_gen2: opentrons/opentrons_96_filtertiprack_1000ul/1
  p300_multi_gen2: opentrons/opentrons_96_filtertiprack_200ul/1
ingredients:
  - Positive control pY71-gfp
  - F-ribo-gfp CFPS
ingredLocations:
  Lysates:
    F-ribo-gfp CFPS {volume: 4000}: A1
  lysate reservoir:
    Positive control pY71-gfp {volume: 550}: A1
savedStepForms:
- stepType: temperature
  stepName: temperature
  moduleId: temperatureModuleV2
  setTemperature: true
  targetTemperature: 4
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  volume: 550
  path: single
  changeTip: once
  aspirate_labware: Lysates
  aspirate_wells: A1
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  dispense_labware: lysate reservoir
  dispense_wells: B1-H1
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 20
  path: multiDispense
  changeTip: once
  aspirate_labware: lysate reservoir
  aspirate_wells: A1
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  dispense_labware: strip tubes
  dispense_wells: A1-A12
  disposalVolume_checkbox: true
  disposalVolume_volume: 20
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 20
  path: multiDispense
  changeTip: never
  aspirate_labware: lysate reservoir
  aspirate_wells: A1
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  dispense_labware: strip tubes (1)
  dispense_wells: A1-A12
  disposalVolume_checkbox: true
  disposalVolume_volume: 20
  blowout_location: source_well
labwareDefinitions:
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commands:
- temperatureModule/setTargetTemperature: {module: temperatureModuleV2, temperature: 4}
- pickUpTip: {pipette: p1000_single_gen2, labware: Opentrons 96 Filter Tip Rack 1000 µL, well: A1}
- aspirate: {pipette: p1000_single_gen2, volume: 550, labware: Lysates, well: A1, offsetFromBottomMm: 1, flowRate: 137.35}
- dispense: {pipette: p1000_single_gen2, volume: 550, labware: lysate reservoir, well: B1, offsetFromBottomMm: 0.5, flowRate: 137.35}
- aspirate: {pipette: p1000_single_gen2, volume: 550, labware: Lysates, well: A1, offsetFromBottomMm: 1, flowRate: 137.35}
- dispense: {pipette: p1000_single_gen2, volume: 550, labware: lysate reservoir, well: C1, offsetFromBottomMm: 0.5, flowRate: 137.35}
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