opentrons/protocol-designer 5.2.6
schemaVersion: 3
protocolName: Serial Dilution Test
author: DEVCOM CBC JM
description: Serial Dilution Plate
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p1000_single_gen2: {mount: left}
  p300_single_gen2: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Filter Tip Rack 1000 µL: {definitionId: opentrons/opentrons_96_filtertiprack_1000ul/1, slot: 1}
  Opentrons 96 Filter Tip Rack 200 µL: {definitionId: opentrons/opentrons_96_filtertiprack_200ul/1, slot: 2}
  Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap: {definitionId: opentrons/opentrons_24_tuberack_nest_1.5ml_snapcap/1, slot: 4}
  Corning 96 Well Plate 360 µL Flat: {definitionId: opentrons/corning_96_wellplate_360ul_flat/1, slot: 5}
pipetteTiprackAssignments:
  p1000_single_gen2: opentrons/opentrons_96_filtertiprack_1000ul/1
  p300_single_gen2: opentrons/opentrons_96_filtertiprack_200ul/1
ingredients:
  - Water
  - Blue
  - Red
  - Yellow
  - Green
ingredLocations:
  Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap:
    Water {volume: 1500}: A1
    Red {volume: 500}: A2
    Green {volume: 500}: A3
    Blue {volume: 500}: A4
    Yellow {volume: 500}: A5
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  volume: 200
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap
  aspirate_wells: A2
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: A1
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  volume: 200
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap
  aspirate_wells: A3
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: B1
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  volume: 200
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap
  aspirate_wells: A4
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: C1
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  volume: 200
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap
  aspirate_wells: A5
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: D1
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 20
  path: single
  changeTip: always
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A1-D1
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: A2-D2
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 80
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap
  aspirate_wells: A1
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: A2-D2
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 20
  path: single
  changeTip: always
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A2-D2
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 2
  aspirate_mix_volume: 50
  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: A3-D3
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 80
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap
  aspirate_wells: A1
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: A3-D3
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 20
  path: single
  changeTip: always
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A3-D3
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 2
  aspirate_mix_volume: 50
  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: A4-D4
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 80
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap
  aspirate_wells: A1
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: A4-D4
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 20
  path: single
  changeTip: always
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A4-D4
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 2
  aspirate_mix_volume: 50
  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: A5-D5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 80
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap
  aspirate_wells: A1
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: A5-D5
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p1000_single_gen2, labware: Opentrons 96 Filter Tip Rack 1000 µL, well: A1}
- aspirate: {pipette: p1000_single_gen2, volume: 200, labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap, well: A2, offsetFromBottomMm: 1, flowRate: 137.35}
- dispense: {pipette: p1000_single_gen2, volume: 200, labware: Corning 96 Well Plate 360 µL Flat, well: A1, offsetFromBottomMm: 0.5, flowRate: 137.35}
- dropTip: {pipette: p1000_single_gen2, labware: Trash, well: A1}
- pickUpTip: {pipette: p1000_single_gen2, labware: Opentrons 96 Filter Tip Rack 1000 µL, well: B1}
- aspirate: {pipette: p1000_single_gen2, volume: 200, labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap, well: A3, offsetFromBottomMm: 1, flowRate: 137.35}
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